config:
  title: transfection
  description: No description given
  copyright: No copyright declared
  version: no version info
  maintainer: {name: No maintainer, email: noone@nowehere}
  github: {repo: none, user: none, access_token: none}
  aquadoc_version: 1.0.2
sample_types:
  - {name: Cell, description: transfection sample type}
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object_types:
  - {name: DMEM Growth Media, description: transfection object type, handler: sample_container, unit: Cell, release_method: return, sample_type_name: Cell}
  - {name: Opti-Mem, description: transfection object type, handler: sample_container, unit: Cell, release_method: return, sample_type_name: Cell}
  - {name: Lipofectamine, description: transfection object type, handler: sample_container, unit: Cell, release_method: return, sample_type_name: Cell}
  - {name: 24-Well Plate, description: transfection object type, handler: sample_container, unit: Cell, release_method: return, sample_type_name: Cell}
  - {name: Incubator, description: transfection object type, handler: sample_container, unit: Cell, release_method: return, sample_type_name: Cell}
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operation_type: transfection
category: Misc.
deployed: false
on_the_fly: true
field_types:
  - {ftype: sample, role: input, name: dmem, sample_types: [Cell], object_types: [DMEM Growth Media]}
  - {ftype: sample, role: input, name: optimem, sample_types: [Cell], object_types: [Opti-Mem]}
  - {ftype: sample, role: input, name: lipofectamine, sample_types: [Cell], object_types: [Lipofectamine]}
  - {ftype: sample, role: output, name: plate, sample_types: [Cell], object_types: [24-Well Plate]}
  - {ftype: sample, role: output, name: co2_incub, sample_types: [Cell], object_types: [Incubator]}
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protocol:
class Protocol
  def main
    operations.retrieve  # locate required items and display instructions to get them
    operations.make      # create items for the outputs

    operations.each do |operation|
      operation_task(operation)
    end

    operations.store    # move everything where it belongs
  end

  # Perform the Streak Plate protocol for a single operation
  #
  # @param operation [Operation] the operation to be executed
  def operation_task(operation)
    # Declare references to input/output objects
    dmem = operation.input('dmem').item
    optimem = operation.input('optimem').item
    lipofectamine = operation.input('lipofectamine').item
    output_plate = operation.output('plate').item
    co2_incub = operation.output('co2_incub').item
    # Display cell seeding instructions
    show do
      title 'Plate Cells'
      check "Get a 24-well plate and label it #{output_plate.id}"
      check 'Trypsinize and count the cells'
      check "Plate 0.5 -1.25x10\^5 cells per well in 0.5 ml of complete growth medium #{dmem.id}. Cell density should be 50-80\% confluent on the day of transfection"
      check '(Optional) Remove growth medium from cells and replace with 0.5 ml of complete growth medium'
    end

    show do
        title 'Dilute DNA in Opti-Mem Media'
        check "For each well, dilute 0.5 g of DNA in 100 l of Opti-MEM I Reduced Serum Media without serum #{optimem}"
    end

    show do
        title 'Add Lipofectamine'
        check "Add 0.75-1.75 l Lipofectamine #{lipofectamine.id} to each well in the plate #{output_plate.id} containing diluted DNA-Opti-MEM solution"
        check 'Mix gently'
        check 'Uncubate 30 minutes at room temperature to form DNA- Lipofectamine LTX Reagent complexes.'
    end

    show do 
        title 'Add DNA-Lipofectamine complexes'
        check "Add 100 l of the DNA- Lipofectamine LTX Reagent complexes to each well in the plate #{output_plate.id}" 
        check 'Mix gently by rocking the plate back and forth.'
    end

    show do
        title 'Incubate cells'
        check "Incubate in CO2 incubator #{co2_incub.id} at 37 C"
        check 'Wait 18-24 hours before assaying for transgene expression'
    end
    # Move the plate to the incubator
    output_plate.move('CO2 incubator')
  end
end

library: {name: New Library Code, category: Misc.}
code_source:
# Library code here

library: {name: Debug, category: Standard Libs}
code_source:
module Debug
  def print_object obj
    if [Numeric, String].any? { |c| obj.is_a? c }
      obj
    elsif [Array].any? { |c| obj.is_a? c }
      obj.map { |item| print_object item }
    elsif [Hash].any? { |c| obj.is_a? c }
      Hash[obj.map { |k, v| [k, print_object(v)] }]
    else
      s = obj ? obj.id.to_s : ""
      s += " #{obj.name}" if obj.class.method_defined? :name
      s
    end
  end

  def log_info *args
    if debug
      show do
        title "Debug slide (#{args.length} #{"arg".pluralize args.length})"

        args.each do |arg|
          note "#{arg.class}: #{print_object arg}"
        end
      end
    end
  end

    def inspect(object, ident=nil)
        show do
            title "<span style=\"background-color:yellow\">INSPECTING #{ident} (#{object.class})</span>"
            if object.kind_of?(Array)
              table object
            else
              note object.to_json
            end
        end
    end
end
